OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

GDF file reader => #0
  Filename = C:/Users/natad/Documents/SMC/MasterThesis/Stimuli/OpenVibeLua/OpenVibe/Resultados/record-[2017.20.04-n8].gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Channel Selector "F4;AF4"
  Channel List = F4;AF4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #2
  Spatial Filter Coefficients = 0.5;0.5
  Number of Output Channels = 1
  Number of Input Channels = 2
  Filter matrix file =
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP "alpha F4" => #7
  Equation = log(1+x)
-> Simple DSP "arousal F4 (1/A)" => #8
  Equation = 1/A
#2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 28.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP "beta F4" => #13
  Equation = log(1+x)
Input - A=#7, Input - B=#13 -> Simple DSP "arousal F4 (B/A)" => #14
  Equation = B/A
#0.EEG stream -> Channel Selector "AF3;AF4;F3;F4"
  Channel List = AF3;AF4;F3;F4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #16
  Spatial Filter Coefficients = 0.25;0.25;0.25;0.25
  Number of Output Channels = 1
  Number of Input Channels = 4
  Filter matrix file =
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #21
  Equation = log(1+x)
-> Simple DSP => #22
  Equation = 1/A
Input 1=#21, Input 2=#22 -> Signal Merger => #23
#16 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 28.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #28
  Equation = log(1+x)
Input - A=#21, Input - B=#28 -> Simple DSP => #29
  Equation = B/A
Input 1=#28, Input 2=#29 -> Signal Merger => #30
#16 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4.000000
  High cut frequency (Hz) = 8.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #35
  Equation = log(1+x)
#16 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 28.000000
  High cut frequency (Hz) = 60.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #40
  Equation = log(1+x)
Input 1=#35, Input 2=#40 -> Signal Merger => #41
Input 1=#23, Input 2=#30, Input 3=#41 -> Signal Merger => #42
-> 0xc67a01dc CSV File Writer
  Filename = C:/Users/natad/Documents/SMC/MasterThesis/Data postprocessing/arousals_n8.csv
  Column separator = ;
  Precision = 10
#0.EEG stream -> Channel Selector "F3;AF3"
  Channel List = F3;AF3
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #45
  Spatial Filter Coefficients = 0.5;0.5
  Number of Output Channels = 1
  Number of Input Channels = 2
  Filter matrix file =
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP "alpha F3" => #50
  Equation = log(1+x)
-> Simple DSP "arousal F3 (1/A)" => #51
  Equation = 1/A
Input - A=#51, Input - B=#8 -> Simple DSP "valence" => #52
  Equation = B-A
#45 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 28.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP "beta F3" => #57
  Equation = log(1+x)
Input - A=#57, Input - B=#50 -> Simple DSP "arousal F3 (B/A)" => #58
  Equation = B/A
Input - A=#58, Input - B=#14 -> Simple DSP "valence" => #59
  Equation = B-A
Input - A=#57, Input - B=#13 -> Simple DSP "valence" => #60
  Equation = B-A
Input 1=#52, Input 2=#59, Input 3=#60 -> Signal Merger => #61
-> CSV File Writer
  Filename = C:/Users/natad/Documents/SMC/MasterThesis/Data postprocessing/valence_n8.csv
  Column separator = ;
  Precision = 10
Input 1=#42, Input 2=#61 -> Signal Merger
-> CSV File Writer
  Filename = C:/Users/natad/Documents/SMC/MasterThesis/Data postprocessing/VArecording_n8.csv
  Column separator = ;
  Precision = 10
